WorkflowBuilder(Version=2.6.0)
GroupWorkflow VideoAcquisition
    Bonsai.Vision.FileCapture(FileName="2 - 30.mp4", PlaybackRate=90, StartPosition=100, PositionUnits=Frames, Loop=false, Playing=true)
    -> Bonsai.Vision.Crop(RegionOfInterest(X=140, Y=1, Width=1639, Height=1078)) => #1
    -> Bonsai.Vision.Grayscale => #2
    -> Bonsai.Vision.MaskPolygon => #3
      Regions
        ArrayOfPoint(Point(X=1507, Y=947), Point(X=1512, Y=947), Point(X=1512, Y=947), Point(X=1507, Y=947))
        ArrayOfPoint(Point(X=1535, Y=43), Point(X=1536, Y=43), Point(X=1536, Y=43), Point(X=1535, Y=43))
        ArrayOfPoint(Point(X=2, Y=1), Point(X=1689, Y=0), Point(X=1690, Y=535), Point(X=1690, Y=668), Point(X=1690, Y=802), Point(X=1691, Y=1070), Point(X=0, Y=1077))
        ArrayOfPoint
          Point(X=1109, Y=219)
          Point(X=1107, Y=240)
          Point(X=1101, Y=262)
          Point(X=1092, Y=281)
          Point(X=1079, Y=300)
          Point(X=1063, Y=316)
          Point(X=1044, Y=328)
          Point(X=1023, Y=338)
          Point(X=1001, Y=344)
          Point(X=979, Y=345)
          Point(X=956, Y=344)
          Point(X=934, Y=338)
          Point(X=914, Y=328)
          Point(X=894, Y=316)
          Point(X=878, Y=300)
          Point(X=865, Y=282)
          Point(X=856, Y=262)
          Point(X=850, Y=240)
          Point(X=849, Y=219)
          Point(X=850, Y=196)
          Point(X=856, Y=174)
          Point(X=865, Y=155)
          Point(X=878, Y=136)
          Point(X=894, Y=120)
          Point(X=914, Y=108)
          Point(X=934, Y=98)
          Point(X=956, Y=92)
          Point(X=979, Y=91)
          Point(X=1001, Y=92)
          Point(X=1023, Y=98)
          Point(X=1044, Y=108)
          Point(X=1063, Y=120)
          Point(X=1079, Y=136)
          Point(X=1092, Y=155)
          Point(X=1101, Y=174)
          Point(X=1107, Y=196)
        ArrayOfPoint
          Point(X=480, Y=524)
          Point(X=478, Y=545)
          Point(X=472, Y=567)
          Point(X=463, Y=586)
          Point(X=450, Y=605)
          Point(X=434, Y=621)
          Point(X=415, Y=633)
          Point(X=394, Y=643)
          Point(X=372, Y=649)
          Point(X=350, Y=650)
          Point(X=327, Y=649)
          Point(X=305, Y=643)
          Point(X=285, Y=633)
          Point(X=265, Y=621)
          Point(X=249, Y=605)
          Point(X=236, Y=587)
          Point(X=227, Y=567)
          Point(X=221, Y=545)
          Point(X=220, Y=524)
          Point(X=221, Y=501)
          Point(X=227, Y=479)
          Point(X=236, Y=460)
          Point(X=249, Y=441)
          Point(X=265, Y=425)
          Point(X=285, Y=413)
          Point(X=305, Y=403)
          Point(X=327, Y=397)
          Point(X=350, Y=396)
          Point(X=372, Y=397)
          Point(X=394, Y=403)
          Point(X=415, Y=413)
          Point(X=434, Y=425)
          Point(X=450, Y=441)
          Point(X=463, Y=460)
          Point(X=472, Y=479)
          Point(X=478, Y=501)
        ArrayOfPoint
          Point(X=1101, Y=523)
          Point(X=1099, Y=544)
          Point(X=1093, Y=566)
          Point(X=1084, Y=585)
          Point(X=1071, Y=604)
          Point(X=1055, Y=620)
          Point(X=1036, Y=632)
          Point(X=1015, Y=642)
          Point(X=993, Y=648)
          Point(X=971, Y=649)
          Point(X=948, Y=648)
          Point(X=926, Y=642)
          Point(X=906, Y=632)
          Point(X=886, Y=620)
          Point(X=870, Y=604)
          Point(X=857, Y=586)
          Point(X=848, Y=566)
          Point(X=842, Y=544)
          Point(X=841, Y=523)
          Point(X=842, Y=500)
          Point(X=848, Y=478)
          Point(X=857, Y=459)
          Point(X=870, Y=440)
          Point(X=886, Y=424)
          Point(X=906, Y=412)
          Point(X=926, Y=402)
          Point(X=948, Y=396)
          Point(X=971, Y=395)
          Point(X=993, Y=396)
          Point(X=1015, Y=402)
          Point(X=1036, Y=412)
          Point(X=1055, Y=424)
          Point(X=1071, Y=440)
          Point(X=1084, Y=459)
          Point(X=1093, Y=478)
          Point(X=1099, Y=500)
        ArrayOfPoint
          Point(X=795, Y=524)
          Point(X=793, Y=545)
          Point(X=787, Y=567)
          Point(X=778, Y=586)
          Point(X=765, Y=605)
          Point(X=749, Y=621)
          Point(X=730, Y=633)
          Point(X=709, Y=643)
          Point(X=687, Y=649)
          Point(X=665, Y=650)
          Point(X=642, Y=649)
          Point(X=620, Y=643)
          Point(X=600, Y=633)
          Point(X=580, Y=621)
          Point(X=564, Y=605)
          Point(X=551, Y=587)
          Point(X=542, Y=567)
          Point(X=536, Y=545)
          Point(X=535, Y=524)
          Point(X=536, Y=501)
          Point(X=542, Y=479)
          Point(X=551, Y=460)
          Point(X=564, Y=441)
          Point(X=580, Y=425)
          Point(X=600, Y=413)
          Point(X=620, Y=403)
          Point(X=642, Y=397)
          Point(X=665, Y=396)
          Point(X=687, Y=397)
          Point(X=709, Y=403)
          Point(X=730, Y=413)
          Point(X=749, Y=425)
          Point(X=765, Y=441)
          Point(X=778, Y=460)
          Point(X=787, Y=479)
          Point(X=793, Y=501)
        ArrayOfPoint
          Point(X=1416, Y=533)
          Point(X=1414, Y=554)
          Point(X=1408, Y=576)
          Point(X=1399, Y=595)
          Point(X=1386, Y=614)
          Point(X=1370, Y=630)
          Point(X=1351, Y=642)
          Point(X=1330, Y=652)
          Point(X=1308, Y=658)
          Point(X=1286, Y=659)
          Point(X=1263, Y=658)
          Point(X=1241, Y=652)
          Point(X=1221, Y=642)
          Point(X=1201, Y=630)
          Point(X=1185, Y=614)
          Point(X=1172, Y=596)
          Point(X=1163, Y=576)
          Point(X=1157, Y=554)
          Point(X=1156, Y=533)
          Point(X=1157, Y=510)
          Point(X=1163, Y=488)
          Point(X=1172, Y=469)
          Point(X=1185, Y=450)
          Point(X=1201, Y=434)
          Point(X=1221, Y=422)
          Point(X=1241, Y=412)
          Point(X=1263, Y=406)
          Point(X=1286, Y=405)
          Point(X=1308, Y=406)
          Point(X=1330, Y=412)
          Point(X=1351, Y=422)
          Point(X=1370, Y=434)
          Point(X=1386, Y=450)
          Point(X=1399, Y=469)
          Point(X=1408, Y=488)
          Point(X=1414, Y=510)
        ArrayOfPoint
          Point(X=477, Y=842)
          Point(X=475, Y=863)
          Point(X=469, Y=885)
          Point(X=460, Y=904)
          Point(X=447, Y=923)
          Point(X=431, Y=939)
          Point(X=412, Y=951)
          Point(X=391, Y=961)
          Point(X=369, Y=967)
          Point(X=347, Y=968)
          Point(X=324, Y=967)
          Point(X=302, Y=961)
          Point(X=282, Y=951)
          Point(X=262, Y=939)
          Point(X=246, Y=923)
          Point(X=233, Y=905)
          Point(X=224, Y=885)
          Point(X=218, Y=863)
          Point(X=217, Y=842)
          Point(X=218, Y=819)
          Point(X=224, Y=797)
          Point(X=233, Y=778)
          Point(X=246, Y=759)
          Point(X=262, Y=743)
          Point(X=282, Y=731)
          Point(X=302, Y=721)
          Point(X=324, Y=715)
          Point(X=347, Y=714)
          Point(X=369, Y=715)
          Point(X=391, Y=721)
          Point(X=412, Y=731)
          Point(X=431, Y=743)
          Point(X=447, Y=759)
          Point(X=460, Y=778)
          Point(X=469, Y=797)
          Point(X=475, Y=819)
        ArrayOfPoint
          Point(X=789, Y=830)
          Point(X=787, Y=851)
          Point(X=781, Y=873)
          Point(X=772, Y=892)
          Point(X=759, Y=911)
          Point(X=743, Y=927)
          Point(X=724, Y=939)
          Point(X=703, Y=949)
          Point(X=681, Y=955)
          Point(X=659, Y=956)
          Point(X=636, Y=955)
          Point(X=614, Y=949)
          Point(X=594, Y=939)
          Point(X=574, Y=927)
          Point(X=558, Y=911)
          Point(X=545, Y=893)
          Point(X=536, Y=873)
          Point(X=530, Y=851)
          Point(X=529, Y=830)
          Point(X=530, Y=807)
          Point(X=536, Y=785)
          Point(X=545, Y=766)
          Point(X=558, Y=747)
          Point(X=574, Y=731)
          Point(X=594, Y=719)
          Point(X=614, Y=709)
          Point(X=636, Y=703)
          Point(X=659, Y=702)
          Point(X=681, Y=703)
          Point(X=703, Y=709)
          Point(X=724, Y=719)
          Point(X=743, Y=731)
          Point(X=759, Y=747)
          Point(X=772, Y=766)
          Point(X=781, Y=785)
          Point(X=787, Y=807)
        ArrayOfPoint
          Point(X=1107, Y=836)
          Point(X=1105, Y=857)
          Point(X=1099, Y=879)
          Point(X=1090, Y=898)
          Point(X=1077, Y=917)
          Point(X=1061, Y=933)
          Point(X=1042, Y=945)
          Point(X=1021, Y=955)
          Point(X=999, Y=961)
          Point(X=977, Y=962)
          Point(X=954, Y=961)
          Point(X=932, Y=955)
          Point(X=912, Y=945)
          Point(X=892, Y=933)
          Point(X=876, Y=917)
          Point(X=863, Y=899)
          Point(X=854, Y=879)
          Point(X=848, Y=857)
          Point(X=847, Y=836)
          Point(X=848, Y=813)
          Point(X=854, Y=791)
          Point(X=863, Y=772)
          Point(X=876, Y=753)
          Point(X=892, Y=737)
          Point(X=912, Y=725)
          Point(X=932, Y=715)
          Point(X=954, Y=709)
          Point(X=977, Y=708)
          Point(X=999, Y=709)
          Point(X=1021, Y=715)
          Point(X=1042, Y=725)
          Point(X=1061, Y=737)
          Point(X=1077, Y=753)
          Point(X=1090, Y=772)
          Point(X=1099, Y=791)
          Point(X=1105, Y=813)
        ArrayOfPoint
          Point(X=1412, Y=848)
          Point(X=1410, Y=869)
          Point(X=1404, Y=891)
          Point(X=1395, Y=910)
          Point(X=1382, Y=929)
          Point(X=1366, Y=945)
          Point(X=1347, Y=957)
          Point(X=1326, Y=967)
          Point(X=1304, Y=973)
          Point(X=1282, Y=974)
          Point(X=1259, Y=973)
          Point(X=1237, Y=967)
          Point(X=1217, Y=957)
          Point(X=1197, Y=945)
          Point(X=1181, Y=929)
          Point(X=1168, Y=911)
          Point(X=1159, Y=891)
          Point(X=1153, Y=869)
          Point(X=1152, Y=848)
          Point(X=1153, Y=825)
          Point(X=1159, Y=803)
          Point(X=1168, Y=784)
          Point(X=1181, Y=765)
          Point(X=1197, Y=749)
          Point(X=1217, Y=737)
          Point(X=1237, Y=727)
          Point(X=1259, Y=721)
          Point(X=1282, Y=720)
          Point(X=1304, Y=721)
          Point(X=1326, Y=727)
          Point(X=1347, Y=737)
          Point(X=1366, Y=749)
          Point(X=1382, Y=765)
          Point(X=1395, Y=784)
          Point(X=1404, Y=803)
          Point(X=1410, Y=825)
        ArrayOfPoint
          Point(X=793, Y=216)
          Point(X=791, Y=237)
          Point(X=785, Y=259)
          Point(X=776, Y=278)
          Point(X=763, Y=297)
          Point(X=747, Y=313)
          Point(X=728, Y=325)
          Point(X=707, Y=335)
          Point(X=685, Y=341)
          Point(X=663, Y=342)
          Point(X=640, Y=341)
          Point(X=618, Y=335)
          Point(X=598, Y=325)
          Point(X=578, Y=313)
          Point(X=562, Y=297)
          Point(X=549, Y=279)
          Point(X=540, Y=259)
          Point(X=534, Y=237)
          Point(X=533, Y=216)
          Point(X=534, Y=193)
          Point(X=540, Y=171)
          Point(X=549, Y=152)
          Point(X=562, Y=133)
          Point(X=578, Y=117)
          Point(X=598, Y=105)
          Point(X=618, Y=95)
          Point(X=640, Y=89)
          Point(X=663, Y=88)
          Point(X=685, Y=89)
          Point(X=707, Y=95)
          Point(X=728, Y=105)
          Point(X=747, Y=117)
          Point(X=763, Y=133)
          Point(X=776, Y=152)
          Point(X=785, Y=171)
          Point(X=791, Y=193)
        ArrayOfPoint
          Point(X=1420, Y=209)
          Point(X=1418, Y=230)
          Point(X=1412, Y=252)
          Point(X=1403, Y=271)
          Point(X=1390, Y=290)
          Point(X=1374, Y=306)
          Point(X=1355, Y=318)
          Point(X=1334, Y=328)
          Point(X=1312, Y=334)
          Point(X=1290, Y=335)
          Point(X=1267, Y=334)
          Point(X=1245, Y=328)
          Point(X=1225, Y=318)
          Point(X=1205, Y=306)
          Point(X=1189, Y=290)
          Point(X=1176, Y=272)
          Point(X=1167, Y=252)
          Point(X=1161, Y=230)
          Point(X=1160, Y=209)
          Point(X=1161, Y=186)
          Point(X=1167, Y=164)
          Point(X=1176, Y=145)
          Point(X=1189, Y=126)
          Point(X=1205, Y=110)
          Point(X=1225, Y=98)
          Point(X=1245, Y=88)
          Point(X=1267, Y=82)
          Point(X=1290, Y=81)
          Point(X=1312, Y=82)
          Point(X=1334, Y=88)
          Point(X=1355, Y=98)
          Point(X=1374, Y=110)
          Point(X=1390, Y=126)
          Point(X=1403, Y=145)
          Point(X=1412, Y=164)
          Point(X=1418, Y=186)
        ArrayOfPoint
          Point(X=475, Y=209)
          Point(X=473, Y=230)
          Point(X=467, Y=252)
          Point(X=458, Y=271)
          Point(X=445, Y=290)
          Point(X=429, Y=306)
          Point(X=410, Y=318)
          Point(X=389, Y=328)
          Point(X=367, Y=334)
          Point(X=345, Y=335)
          Point(X=322, Y=334)
          Point(X=300, Y=328)
          Point(X=280, Y=318)
          Point(X=260, Y=306)
          Point(X=244, Y=290)
          Point(X=231, Y=272)
          Point(X=222, Y=252)
          Point(X=216, Y=230)
          Point(X=215, Y=209)
          Point(X=216, Y=186)
          Point(X=222, Y=164)
          Point(X=231, Y=145)
          Point(X=244, Y=126)
          Point(X=260, Y=110)
          Point(X=280, Y=98)
          Point(X=300, Y=88)
          Point(X=322, Y=82)
          Point(X=345, Y=81)
          Point(X=367, Y=82)
          Point(X=389, Y=88)
          Point(X=410, Y=98)
          Point(X=429, Y=110)
          Point(X=445, Y=126)
          Point(X=458, Y=145)
          Point(X=467, Y=164)
          Point(X=473, Y=186)
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    #2, #3 -> WithLatestFrom
    -> Bonsai.Dsp.AbsoluteDifference
    -> PublishSubject Placa1
    #1 -> Last
    -> PublishSubject Image

SubscribeSubject Placa1
-> GroupWorkflow Wells
    WorkflowInput Source1 => #0
    -> Bonsai.Vision.MaskPolygon
      Regions
        ArrayOfPoint(Point(X=1507, Y=947), Point(X=1512, Y=947), Point(X=1512, Y=947), Point(X=1507, Y=947))
        ArrayOfPoint(Point(X=1535, Y=43), Point(X=1536, Y=43), Point(X=1536, Y=43), Point(X=1535, Y=43))
        ArrayOfPoint(Point(X=212, Y=704), Point(X=485, Y=704), Point(X=485, Y=980), Point(X=212, Y=980))
        ArrayOfPoint(Point(X=309, Y=749), Point(X=309, Y=749), Point(X=309, Y=749), Point(X=309, Y=749))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> GroupWorkflow "well 9" => #2
        WorkflowInput Source1 => #0
        Source2=#0 -> Bonsai.Vision.Threshold(ThresholdValue=110, MaxValue=255, ThresholdType=ToZeroInv)
        -> Bonsai.Vision.MorphologicalOperator(Size(Width=3, Height=3), Anchor(X=-2, Y=-2), Shape=Rectangle, Iterations=1, Operation=Dilate)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=1, Y=1), MinArea=30, MaxArea=200)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> MemberSelector(Selector=Centroid)
        -> WorkflowOutput
    #0 -> Bonsai.Vision.MaskPolygon
      Regions
        ArrayOfPoint(Point(X=1507, Y=947), Point(X=1512, Y=947), Point(X=1512, Y=947), Point(X=1507, Y=947))
        ArrayOfPoint(Point(X=1535, Y=43), Point(X=1536, Y=43), Point(X=1536, Y=43), Point(X=1535, Y=43))
        ArrayOfPoint(Point(X=526, Y=692), Point(X=799, Y=692), Point(X=799, Y=968), Point(X=526, Y=968))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> GroupWorkflow "well 10" => #4
        WorkflowInput Source1 => #0
        Source2=#0 -> Bonsai.Vision.Threshold(ThresholdValue=115, MaxValue=255, ThresholdType=ToZeroInv)
        -> Bonsai.Vision.MorphologicalOperator(Size(Width=3, Height=3), Anchor(X=-2, Y=-2), Shape=Rectangle, Iterations=1, Operation=Dilate)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=1, Y=1), MinArea=50, MaxArea=250)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> MemberSelector(Selector=Centroid)
        -> WorkflowOutput
    #0 -> Bonsai.Vision.MaskPolygon
      Regions
        ArrayOfPoint(Point(X=1507, Y=947), Point(X=1512, Y=947), Point(X=1512, Y=947), Point(X=1507, Y=947))
        ArrayOfPoint(Point(X=1535, Y=43), Point(X=1536, Y=43), Point(X=1536, Y=43), Point(X=1535, Y=43))
        ArrayOfPoint(Point(X=840, Y=696), Point(X=1113, Y=696), Point(X=1113, Y=972), Point(X=840, Y=972))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> GroupWorkflow "well 11" => #6
        WorkflowInput Source1 => #0
        Source2=#0 -> Bonsai.Vision.Threshold(ThresholdValue=113, MaxValue=255, ThresholdType=ToZeroInv)
        -> Bonsai.Vision.MorphologicalOperator(Size(Width=3, Height=3), Anchor(X=-2, Y=-2), Shape=Rectangle, Iterations=1, Operation=Dilate)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=1, Y=1), MinArea=20, MaxArea=250)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> MemberSelector(Selector=Centroid)
        -> WorkflowOutput
    #0 -> Bonsai.Vision.MaskPolygon
      Regions
        ArrayOfPoint(Point(X=1507, Y=947), Point(X=1512, Y=947), Point(X=1512, Y=947), Point(X=1507, Y=947))
        ArrayOfPoint(Point(X=1535, Y=43), Point(X=1536, Y=43), Point(X=1536, Y=43), Point(X=1535, Y=43))
        ArrayOfPoint(Point(X=1148, Y=712), Point(X=1421, Y=712), Point(X=1421, Y=988), Point(X=1148, Y=988))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> GroupWorkflow "well 12" => #8
        WorkflowInput Source1 => #0
        Source2=#0 -> Bonsai.Vision.Threshold(ThresholdValue=105, MaxValue=255, ThresholdType=ToZeroInv)
        -> Bonsai.Vision.MorphologicalOperator(Size(Width=3, Height=3), Anchor(X=-2, Y=-2), Shape=Ellipse, Iterations=1, Operation=Dilate)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxSimple, Offset(X=1, Y=1), MinArea=50, MaxArea=250)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> MemberSelector(Selector=Centroid)
        -> WorkflowOutput
    #2, #4, #6, #8 -> Zip => #9
    #0 -> Bonsai.Vision.MaskPolygon
      Regions
        ArrayOfPoint(Point(X=1507, Y=947), Point(X=1512, Y=947), Point(X=1512, Y=947), Point(X=1507, Y=947))
        ArrayOfPoint(Point(X=1535, Y=43), Point(X=1536, Y=43), Point(X=1536, Y=43), Point(X=1535, Y=43))
        ArrayOfPoint(Point(X=213, Y=524), Point(X=213, Y=386), Point(X=486, Y=386), Point(X=486, Y=662), Point(X=213, Y=662))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> GroupWorkflow "well 5" => #11
        WorkflowInput Source1 => #0
        Source2=#0 -> Bonsai.Vision.Threshold(ThresholdValue=100, MaxValue=255, ThresholdType=ToZeroInv)
        -> Bonsai.Vision.MorphologicalOperator(Size(Width=3, Height=3), Anchor(X=-2, Y=-2), Shape=Rectangle, Iterations=1, Operation=Dilate)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=1, Y=1), MinArea=70, MaxArea=250)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> MemberSelector(Selector=Centroid)
        -> WorkflowOutput
    #0 -> Bonsai.Vision.MaskPolygon
      Regions
        ArrayOfPoint(Point(X=1507, Y=947), Point(X=1512, Y=947), Point(X=1512, Y=947), Point(X=1507, Y=947))
        ArrayOfPoint(Point(X=1535, Y=43), Point(X=1536, Y=43), Point(X=1536, Y=43), Point(X=1535, Y=43))
        ArrayOfPoint(Point(X=531, Y=389), Point(X=804, Y=389), Point(X=804, Y=665), Point(X=531, Y=665))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> GroupWorkflow "well 6" => #13
        WorkflowInput Source1 => #0
        Source2=#0 -> Bonsai.Vision.Threshold(ThresholdValue=105, MaxValue=255, ThresholdType=ToZeroInv)
        -> Bonsai.Vision.MorphologicalOperator(Size(Width=3, Height=3), Anchor(X=-2, Y=-2), Shape=Rectangle, Iterations=1, Operation=Dilate)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=1, Y=1), MinArea=70, MaxArea=250)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> MemberSelector(Selector=Centroid)
        -> WorkflowOutput
    #0 -> Bonsai.Vision.MaskPolygon
      Regions
        ArrayOfPoint(Point(X=1507, Y=947), Point(X=1512, Y=947), Point(X=1512, Y=947), Point(X=1507, Y=947))
        ArrayOfPoint(Point(X=1535, Y=43), Point(X=1536, Y=43), Point(X=1536, Y=43), Point(X=1535, Y=43))
        ArrayOfPoint(Point(X=837, Y=385), Point(X=1110, Y=385), Point(X=1110, Y=661), Point(X=837, Y=661))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> GroupWorkflow "well 7" => #15
        WorkflowInput Source1 => #0
        Source2=#0 -> Bonsai.Vision.Threshold(ThresholdValue=107, MaxValue=255, ThresholdType=ToZeroInv)
        -> Bonsai.Vision.MorphologicalOperator(Size(Width=3, Height=3), Anchor(X=-2, Y=-2), Shape=Rectangle, Iterations=1, Operation=Dilate)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=1, Y=1), MinArea=50, MaxArea=250)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> MemberSelector(Selector=Centroid)
        -> WorkflowOutput
    #0 -> Bonsai.Vision.MaskPolygon
      Regions
        ArrayOfPoint(Point(X=1507, Y=947), Point(X=1512, Y=947), Point(X=1512, Y=947), Point(X=1507, Y=947))
        ArrayOfPoint(Point(X=1535, Y=43), Point(X=1536, Y=43), Point(X=1536, Y=43), Point(X=1535, Y=43))
        ArrayOfPoint(Point(X=1150, Y=392), Point(X=1423, Y=392), Point(X=1423, Y=668), Point(X=1150, Y=668))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> GroupWorkflow "well 8" => #17
        WorkflowInput Source1 => #0
        Source2=#0 -> Bonsai.Vision.Threshold(ThresholdValue=105, MaxValue=255, ThresholdType=ToZeroInv)
        -> Bonsai.Vision.MorphologicalOperator(Size(Width=3, Height=3), Anchor(X=-2, Y=-2), Shape=Rectangle, Iterations=1, Operation=Dilate)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=1, Y=1), MinArea=30, MaxArea=250)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> MemberSelector(Selector=Centroid)
        -> WorkflowOutput
    #11, #13, #15, #17 -> Zip => #18
    #0 -> Bonsai.Vision.MaskPolygon
      Regions
        ArrayOfPoint(Point(X=1507, Y=947), Point(X=1512, Y=947), Point(X=1512, Y=947), Point(X=1507, Y=947))
        ArrayOfPoint(Point(X=1535, Y=43), Point(X=1536, Y=43), Point(X=1536, Y=43), Point(X=1535, Y=43))
        ArrayOfPoint(Point(X=210, Y=73), Point(X=483, Y=73), Point(X=483, Y=349), Point(X=210, Y=349))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> GroupWorkflow "well 1" => #20
        WorkflowInput Source1 => #0
        Source2=#0 -> Bonsai.Vision.Threshold(ThresholdValue=117, MaxValue=255, ThresholdType=ToZeroInv)
        -> Bonsai.Vision.MorphologicalOperator(Size(Width=3, Height=3), Anchor(X=-2, Y=-2), Shape=Ellipse, Iterations=1, Operation=Dilate)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=1, Y=1), MinArea=30, MaxArea=250)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> MemberSelector(Selector=Centroid)
        -> WorkflowOutput
    #0 -> Bonsai.Vision.MaskPolygon
      Regions
        ArrayOfPoint(Point(X=1507, Y=947), Point(X=1512, Y=947), Point(X=1512, Y=947), Point(X=1507, Y=947))
        ArrayOfPoint(Point(X=1535, Y=43), Point(X=1536, Y=43), Point(X=1536, Y=43), Point(X=1535, Y=43))
        ArrayOfPoint(Point(X=530, Y=73), Point(X=803, Y=73), Point(X=803, Y=349), Point(X=530, Y=349))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> GroupWorkflow "well 2" => #22
        WorkflowInput Source1 => #0
        Source2=#0 -> Bonsai.Vision.Threshold(ThresholdValue=100, MaxValue=255, ThresholdType=ToZeroInv)
        -> Bonsai.Vision.MorphologicalOperator(Size(Width=3, Height=3), Anchor(X=-2, Y=-2), Shape=Rectangle, Iterations=1, Operation=Dilate)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=1, Y=1), MinArea=50, MaxArea=200)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> MemberSelector(Selector=Centroid)
        -> WorkflowOutput
    #0 -> Bonsai.Vision.MaskPolygon
      Regions
        ArrayOfPoint(Point(X=1507, Y=947), Point(X=1512, Y=947), Point(X=1512, Y=947), Point(X=1507, Y=947))
        ArrayOfPoint(Point(X=1535, Y=43), Point(X=1536, Y=43), Point(X=1536, Y=43), Point(X=1535, Y=43))
        ArrayOfPoint(Point(X=846, Y=75), Point(X=1119, Y=75), Point(X=1119, Y=351), Point(X=846, Y=351))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> GroupWorkflow "well 3" => #24
        WorkflowInput Source1 => #0
        Source2=#0 -> Bonsai.Vision.Threshold(ThresholdValue=95, MaxValue=255, ThresholdType=ToZeroInv)
        -> Bonsai.Vision.MorphologicalOperator(Size(Width=3, Height=3), Anchor(X=-2, Y=-2), Shape=Rectangle, Iterations=1, Operation=Dilate)
        -> Bonsai.Vision.FindContours(Mode=Tree, Method=ChainApproxNone, Offset(X=1, Y=1), MinArea=50, MaxArea=250)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> MemberSelector(Selector=Centroid)
        -> WorkflowOutput
    #0 -> Bonsai.Vision.MaskPolygon
      Regions
        ArrayOfPoint(Point(X=1507, Y=947), Point(X=1512, Y=947), Point(X=1512, Y=947), Point(X=1507, Y=947))
        ArrayOfPoint(Point(X=1535, Y=43), Point(X=1536, Y=43), Point(X=1536, Y=43), Point(X=1535, Y=43))
        ArrayOfPoint(Point(X=1153, Y=70), Point(X=1426, Y=70), Point(X=1426, Y=346), Point(X=1153, Y=346))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> GroupWorkflow "well 4" => #26
        WorkflowInput Source1 => #0
        Source2=#0 -> Bonsai.Vision.Threshold(ThresholdValue=110, MaxValue=255, ThresholdType=ToZeroInv)
        -> Bonsai.Vision.MorphologicalOperator(Size(Width=3, Height=3), Anchor(X=-2, Y=-2), Shape=Rectangle, Iterations=1, Operation=Dilate)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=1, Y=1), MinArea=10, MaxArea=150)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> MemberSelector(Selector=Centroid)
        -> WorkflowOutput
    #20, #22, #24, #26 -> Zip => #27
    #27, #18, #9 -> Zip
    -> WorkflowOutput
-> Bonsai.IO.CsvWriter(FileName=MVI_5319_Teste.csv, Delimiter=",", ListSeparator=",", Append=false, Overwrite=true, Suffix=None, IncludeHeader=false)

SubscribeSubject Image
-> Bonsai.Vision.SaveImage(FileName=MVI_5319_Teste.png, Suffix=None)
